PsychoPy2experiment version="2026.2.4"
Settings
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  HTML path = output
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = word_memory_sdt_prototype
  frameRate = 60
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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  Routine Instructoins
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    TextComponent Instructions
      draggable = True
      letterHeight = 0.035
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In each trial, you will first study a list of words.

        You will then see six test words, one at a time.

        For each test word:

        Press (F) if you SAW the word in the study list.
        Press (J)  if you DID NOT SEE the word in the study list.

        After each response, rate how confident you are:

        1 = Low confidence
        2 = Medium confidence
        3 = High confidence

        Respond as quickly and accurately as possible.

        Press SPACE to begin.
    KeyboardComponent InstructionResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FixationText
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    TextComponent fixationtext
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine TrialSetup
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    CodeComponent TrailSetupCode
      Code Type = Both
      Begin JS Routine:
        studyWords = [
            study_1, study_2, study_3, study_4, study_5,
            study_6, study_7, study_8, study_9, study_10
        ];

        probeWords = [
            probe_1, probe_2, probe_3,
            probe_4, probe_5, probe_6
        ];

        probeStatuses = [
            probe_1_status, probe_2_status, probe_3_status,
            probe_4_status, probe_5_status, probe_6_status
        ];

        probeCorrectKeys = [
            probe_1_correct_key, probe_2_correct_key, probe_3_correct_key,
            probe_4_correct_key, probe_5_correct_key, probe_6_correct_key
        ];

        studyIndex = 0;
        probeIndex = 0;
      Begin Routine:
        studyWords = [
            study_1, study_2, study_3, study_4, study_5,
            study_6, study_7, study_8, study_9, study_10
        ]

        probeWords = [
            probe_1, probe_2, probe_3,
            probe_4, probe_5, probe_6
        ]

        probeStatuses = [
            probe_1_status, probe_2_status, probe_3_status,
            probe_4_status, probe_5_status, probe_6_status
        ]

        probeCorrectKeys = [
            probe_1_correct_key, probe_2_correct_key, probe_3_correct_key,
            probe_4_correct_key, probe_5_correct_key, probe_6_correct_key
        ]

        studyIndex = 0
        probeIndex = 0
  Routine studyWord
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    CodeComponent code
      Code Type = Both
      Begin JS Routine:
        currentStudyWord = studyWords[studyIndex];
        studyIndex = studyIndex + 1;
      Begin Routine:
        currentStudyWord = studyWords[studyIndex]
        studyIndex = studyIndex + 1
    TextComponent studyWordText
      durationEstim = 0.7
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      text [set every repeat] = $currentStudyWord
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  Routine retention
    RoutineSettingsComponent retention
      stopVal [duration (s)] = 2.0
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  Routine probe
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    CodeComponent probecode
      Code Type = Both
      Begin JS Routine:
        currentProbeWord = probeWords[probeIndex];
        currentProbeStatus = probeStatuses[probeIndex];
        currentCorrectKey = probeCorrectKeys[probeIndex];
        probeNumber = probeIndex + 1;
        probeIndex = probeIndex + 1;
      Begin Routine:
        currentProbeWord = probeWords[probeIndex]
        currentProbeStatus = probeStatuses[probeIndex]
        currentCorrectKey = probeCorrectKeys[probeIndex]
        probeNumber = probeIndex + 1
        probeIndex = probeIndex + 1
      End JS Routine:
        psychoJS.experiment.addData("subject_id", subject_id);
        psychoJS.experiment.addData("trial_id", trial_id);
        psychoJS.experiment.addData("set_size", set_size);
        psychoJS.experiment.addData("old_probe_count", old_probe_count);
        psychoJS.experiment.addData("probe_number", probeNumber);
        psychoJS.experiment.addData("probe_word", currentProbeWord);
        psychoJS.experiment.addData("probe_status", currentProbeStatus);
        psychoJS.experiment.addData("correct_key", currentCorrectKey);

        let noResponse = (
            probeResp.keys === undefined ||
            probeResp.keys === null ||
            probeResp.keys.length === 0
        );
        psychoJS.experiment.addData("timed_out", noResponse);

        psychoJS.experiment.addData("is_practice", is_practice);
        psychoJS.experiment.addData("block", block);
        psychoJS.experiment.addData("trial_in_block", trial_in_block);
        psychoJS.experiment.addData("global_trial", global_trial);
      End Routine:
        thisExp.addData("subject_id", subject_id)
        thisExp.addData("trial_id", trial_id)
        thisExp.addData("set_size", set_size)
        thisExp.addData("old_probe_count", old_probe_count)
        thisExp.addData("probe_number", probeNumber)
        thisExp.addData("probe_word", currentProbeWord)
        thisExp.addData("probe_status", currentProbeStatus)
        thisExp.addData("correct_key", currentCorrectKey)

        thisExp.addData("timed_out", probeResp.keys is None)
        thisExp.addData("is_practice", is_practice)
        thisExp.addData("block", block)
        thisExp.addData("trial_in_block", trial_in_block)
        thisExp.addData("global_trial", global_trial)
    TextComponent probeWordText
      durationEstim = 5.0
      letterHeight = 0.10
      pos = (0, 0.06)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text [set every repeat] = $currentProbeWord
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    TextComponent ResponseReminder
      color = $(0.6549, 0.6549, 0.6549)
      letterHeight = 0.035
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = F = SEEN        J = NOT SEEN
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    KeyboardComponent probeResp
      allowedKeys = 'f', 'j'
      correctAns = $currentCorrectKey
      durationEstim = 5.0
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      store = first key
      storeCorrect = True
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  Routine probeBlank
    RoutineSettingsComponent probeBlank
      stopVal [duration (s)] = 0.4
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  Routine iti
    RoutineSettingsComponent iti
      stopVal [duration (s)] = 1.0
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  Routine thanks
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    TextComponent text
      color = $(-0.5137, 0.5137, -0.6235)
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The prototype is complete.

        Thank you.

        Press SPACE to finish.
    KeyboardComponent thanksResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BlockStart
    RoutineSettingsComponent BlockStart
      skipIf = trial_in_block != 1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The next block is ready.


         Press SPACE to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine BlockBreak
    RoutineSettingsComponent BlockBreak
      skipIf = trial_in_block != 15 or block == 4
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed this block.



        Please take a short break.

        Press

        SPACE when you are ready to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeIntro
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PRACTICE

        You will first complete a short practice block.



        After each confidence rating, you will receive feedback about whether your Seen/Not Seen response was correct.



        Press SPACE to start the practice.
    KeyboardComponent practiceStartResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine MainIntro
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    TextComponent practice_complete
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Practice is complete.

        The main experiment will now begin.


        There are four blocks.

        You can take a short break between blocks.



        Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine PracticeFeedback
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    CodeComponent feedbackCode
      Code Type = Both
      Begin JS Routine:
        let statusLabel;

        if (currentProbeStatus === "old") {
            statusLabel = "SEEN";
        } else {
            statusLabel = "NOT SEEN";
        }

        let noResponse = (
            probeResp.keys === undefined ||
            probeResp.keys === null ||
            probeResp.keys.length === 0
        );

        if (noResponse) {
            feedbackMessage =
                "No response\n\nCorrect answer: " +
                currentCorrectKey.toUpperCase() +
                " (" + statusLabel + ")";
            feedbackColor = "yellow";

        } else if (probeResp.corr === 1) {
            feedbackMessage = "Correct";
            feedbackColor = "green";

        } else {
            feedbackMessage =
                "Incorrect\n\nCorrect answer: " +
                currentCorrectKey.toUpperCase() +
                " (" + statusLabel + ")";
            feedbackColor = "red";
        }
      Begin Routine:
        if currentProbeStatus == "old":
            statusLabel = "SEEN"
        else:
            statusLabel = "NOT SEEN"

        if probeResp.keys in [None, [], '']:
            feedbackMessage = (
                "No response\n\nCorrect answer: "
                + currentCorrectKey.upper()
                + " ("
                + statusLabel
                + ")"
            )
            feedbackColor = "yellow"

        elif probeResp.corr == 1:
            feedbackMessage = "Correct"
            feedbackColor = "green"

        else:
            feedbackMessage = (
                "Incorrect\n\nCorrect answer: "
                + currentCorrectKey.upper()
                + " ("
                + statusLabel
                + ")"
            )
            feedbackColor = "red"
    TextComponent feedbackTextStim
      color [set every repeat] = $feedbackColor
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedbackMessage
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  Routine Confidence
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    TextComponent confidenceProbeWord
      letterHeight = 0.10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $currentProbeWord
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    TextComponent confidenceQuestion
      letterHeight = 0.05
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        How confident are you in your previous response?


        1 = LOW        2 = MEDIUM        3 = HIGH
    KeyboardComponent key_resp_4
      allowedKeys = '1','2','3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      store = first key
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Flow
  Routine Instructoins
  Routine PracticeIntro
  LoopInitiator practiceTrials loopType="TrialHandler"
    conditionsFile = C:/Users/Bangaru/OneDrive - Indian Institute of Science/Documents/Sem-3/Congnitive Neuro Scoence/Assignment-1/psychopy_schedules/p002/p002_practice.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_P01'), ('is_practice', np.int64(1)), ('block', np.int64(0)), ('trial_in_block', np.int64(1)), ('global_trial', np.int64(0)), ('set_size', np.int64(6)), ('old_probe_count', np.int64(3)), ('new_probe_count', np.int64(3)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'checks'), ('study_2', 'effort'), ('study_3', 'bounty'), ('study_4', 'sheep'), ('study_5', 'belly'), ('study_6', 'color'), ('study_7', None), ('study_8', None), ('study_9', None), ('study_10', None), ('probe_1', 'backs'), ('probe_1_st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,
      OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_P02'), ('is_practice', np.int64(1)), ('block', np.int64(0)), ('trial_in_block', np.int64(2)), ('global_trial', np.int64(0)), ('set_size', np.int64(4)), ('old_probe_count', np.int64(3)), ('new_probe_count', np.int64(3)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'status'), ('study_2', 'sorts'), ('study_3', 'grass'), ('study_4', 'drinks'), ('study_5', None), ('study_6', None), ('study_7', None), ('study_8', None), ('study_9', None), ('study_10', None), ('probe_1', 'drinks'), ('probe_1_status', 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,
      OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_P03'), ('is_practice', np.int64(1)), ('block', np.int64(0)), ('trial_in_block', np.int64(3)), ('global_trial', np.int64(0)), ('set_size', np.int64(10)), ('old_probe_count', np.int64(3)), ('new_probe_count', np.int64(3)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'magic'), ('study_2', 'blast'), ('study_3', 'opera'), ('study_4', 'alpha'), ('study_5', 'fellow'), ('study_6', 'chapel'), ('study_7', 'drums'), ('study_8', 'value'), ('study_9', 'guests'), ('study_10', 'report'), ('probe_1', 'vodka'),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,
      OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_P04'), ('is_practice', np.int64(1)), ('block', np.int64(0)), ('trial_in_block', np.int64(4)), ('global_trial', np.int64(0)), ('set_size', np.int64(8)), ('old_probe_count', np.int64(3)), ('new_probe_count', np.int64(3)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'mayor'), ('study_2', 'makeup'), ('study_3', 'print'), ('study_4', 'hollow'), ('study_5', 'trick'), ('study_6', 'drink'), ('study_7', 'potion'), ('study_8', 'kidney'), ('study_9', None), ('study_10', None), ('probe_1', 'makeup'), ('pro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
    Routine FixationText
    Routine TrialSetup
    LoopInitiator practiceStudyLoop loopType="TrialHandler"
      loopType = sequential
      nReps = set_size
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      Routine studyWord
    LoopTerminator practiceStudyLoop
    Routine retention
    LoopInitiator practiceProbeLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 6
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      Routine probe
      Routine Confidence
      Routine PracticeFeedback
      Routine probeBlank
    LoopTerminator practiceProbeLoop
    Routine iti
  LoopTerminator practiceTrials
  Routine MainIntro
  LoopInitiator mainTrials loopType="TrialHandler"
    conditionsFile = C:/Users/Bangaru/OneDrive - Indian Institute of Science/Documents/Sem-3/Congnitive Neuro Scoence/Assignment-1/psychopy_schedules/p002/p002_schedule_all.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_B1_T01'), ('is_practice', np.int64(0)), ('block', np.int64(1)), ('trial_in_block', np.int64(1)), ('global_trial', np.int64(1)), ('set_size', np.int64(6)), ('old_probe_count', np.int64(3)), ('new_probe_count', np.int64(3)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'frame'), ('study_2', 'flesh'), ('study_3', 'supply'), ('study_4', 'niece'), ('study_5', 'study'), ('study_6', 'saddle'), ('study_7', None), ('study_8', None), ('study_9', None), ('study_10', None), ('probe_1', 'prince'), ('probe_1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,
      OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_B1_T02'), ('is_practice', np.int64(0)), ('block', np.int64(1)), ('trial_in_block', np.int64(2)), ('global_trial', np.int64(2)), ('set_size', np.int64(4)), ('old_probe_count', np.int64(4)), ('new_probe_count', np.int64(2)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'throne'), ('study_2', 'warden'), ('study_3', 'backup'), ('study_4', 'party'), ('study_5', None), ('study_6', None), ('study_7', None), ('study_8', None), ('study_9', None), ('study_10', None), ('probe_1', 'party'), ('probe_1_status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,
      OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_B1_T03'), ('is_practice', np.int64(0)), ('block', np.int64(1)), ('trial_in_block', np.int64(3)), ('global_trial', np.int64(3)), ('set_size', np.int64(10)), ('old_probe_count', np.int64(3)), ('new_probe_count', np.int64(3)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'souls'), ('study_2', 'brain'), ('study_3', 'guide'), ('study_4', 'forms'), ('study_5', 'timing'), ('study_6', 'deals'), ('study_7', 'cousin'), ('study_8', 'collar'), ('study_9', 'habit'), ('study_10', 'ground'), ('probe_1', 'timin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,
      OrderedDict([('subject_id', 'p002'), ('schedule_seed', np.int64(1939890892)), ('trial_id', 'p002_B1_T04'), ('is_practice', np.int64(0)), ('block', np.int64(1)), ('trial_in_block', np.int64(4)), ('global_trial', np.int64(4)), ('set_size', np.int64(8)), ('old_probe_count', np.int64(3)), ('new_probe_count', np.int64(3)), ('old_key', 'f'), ('new_key', 'j'), ('study_1', 'ritual'), ('study_2', 'hockey'), ('study_3', 'order'), ('study_4', 'sakes'), ('study_5', 'porch'), ('study_6', 'speed'), ('study_7', 'design'), ('study_8', 'woods'), ('study_9', None), ('study_10', None), ('probe_1', 'wound'), ('pr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
    Routine BlockStart
    Routine FixationText
    Routine TrialSetup
    LoopInitiator StudyLoop1 loopType="TrialHandler"
      loopType = sequential
      nReps = set_size
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      Routine studyWord
    LoopTerminator StudyLoop1
    Routine retention
    LoopInitiator probeLoop loopType="TrialHandler"
      loopType = sequential
      nReps = 6
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      Routine probe
      Routine Confidence
      Routine probeBlank
    LoopTerminator probeLoop
    Routine iti
    Routine BlockBreak
  LoopTerminator mainTrials
  Routine thanks
